PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AUTonline2
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine AUTinstrux
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    TextComponent intrux
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        For the next task, you'll be asked to come up with as many original and creative uses for objects as you can.

        The goal is to come up with *creative ideas*, which are ideas that strike people as clever, unusual, interesting, uncommon, humorous, innovative, or different.

        You will have 3 minutes to type as many CREATIVE USES for each object as you can.
        Do not write simply properties of the object, or words associated with the object, but actual uses.

        Press ENTER after each use, to write the next one.

        You will be asked to type uses for 2 different objects.
    TextComponent EntertoContinue
      letterHeight = 0.03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press ENTER to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        AUTtime = 180;


        countdownStarted = false;
        CAPS = false;
      Begin Routine:
        AUTtime=180
        EscapeAllowed = True
        win.mouseVisible = False
        #js code that doesnt work:
        #document.body.style.cursor=‘none’
      Each JS Frame:
        document.body.style.cursor='none';
  Routine AUTblank
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    TextComponent text_5
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine AUT
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    PolygonComponent AUTrespbox
      fillColor = $[1,1,1]
      pos = (0, -0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent InstruxAUT
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Think of as many creative uses as you can
        for the following object:
    TextComponent AUTResp
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $Resptext
      wrapWidth = 0.48
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    TextComponent AUTcueDisp
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cue
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    CodeComponent AUTcode
      Code Type = Both
      Begin Experiment:
        import math

        countdownStarted = False
        CAPS=False
      Begin JS Routine:
        shift_flag = false;
        Resptext = "";
        Key=undefined;
        AUTResp.setText(Resptext)
        RT1stKP=0;

        RTLastKP=0

        if ((! countdownStarted)) {
            startTime = globalClock.getTime();
            countdownStarted = true;
        }

        psychoJS.eventManager.clearKeys();
      Begin Routine:
        shift_flag = False
        Resptext = ''
        RT1stKP=0
        #Resptext2=''
        RTLastKP=0

        if not countdownStarted:
            startTime=globalClock.getTime()
            #timeText="03:00"
            countdownStarted=True

        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        n=len(keys)
        i=0


        ###Timer#####
        Diff=globalClock.getTime()-startTime
        timeRemaining = AUTtime-math.floor(Diff/1) #this gives us a whole number for time
        #remaining, using floor not round since we do not want the seconds to update except when the timeremaining crosses an actual whole integer
        Minutes = int(timeRemaining/60.0) # the integer number of minutes
        Seconds = int(timeRemaining - (Minutes * 60.0))
        if Minutes<10:
            minstring='0' + str(Minutes)
        else:
            minstring=str(Minutes)
        if Seconds<10:
            secstring='0' + str(Seconds)
        else:
            secstring=str(Seconds)
        timeText = minstring + ':' + secstring # create a string of characters representing the time


        ###### Text entry #####
        while i < n: # len(keys):
            if keys[i] == 'return' and len(Resptext)>=1 or timeRemaining<= 0:
                continueRoutine = False
                break
            elif keys[i] == 'escape' and EscapeAllowed == True:
                continueRoutine = False
                core.quit()
                break
            elif keys[i] == 'space' :
                Resptext += " "
                i += 1
            elif keys[i] == 'backspace' :
                Resptext = Resptext[:-1]
                i += 1
            elif keys[i] == 'capslock' :
                if CAPS==True:
                    CAPS= False
                elif CAPS==False:
                    CAPS=True
                i += 1
            elif keys[i] == 'period'and len(Resptext) < 80:
                Resptext += "."
                i += 1
            elif keys[i] == 'minus' and len(Resptext) < 80:
                Resptext += "-"
                i += 1
            elif keys[i] == 'comma' and len(Resptext) < 80:
                Resptext += ","
                i = i + 1
            elif keys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1
            elif keys[i] == 'semicolon' and len(Resptext) < 80:
                if shift_flag == False:
                    Resptext += ";"
                else:
                    Resptext += ":"
                    shift_flag = False
                i += 1
            elif keys[i] == 'apostrophe' and len(Resptext) < 80:
                if shift_flag == False:
                    Resptext += "'"
                else:
                    Resptext += '"'
                i += 1
            elif keys[i] == 'slash' and len(Resptext) < 80:
                if shift_flag == False:
                    Resptext += "/"
                else:
                    Resptext += '?'
                    shift_flag = False
                i = i + 1
            elif keys[i] == '1' and len(Resptext) < 80 and shift_flag == True:
                Resptext += "!"
                shift_flag = False
                i = i + 1
            else:
                if len(Resptext) < 80 and len(keys[i])==1:
                    Key=keys[i]
                    if CAPS or shift_flag:
                        Resptext += Key.upper()
                        shift_flag=False
                    else:
                        Resptext += Key
                i += 1

        if timeRemaining <= 0:
            AUTresps.finished = True
            continueRoutine = False

        """
        Resptext2= ' ' + Resptext + '|'
        if Diff%2 > 1:
            AUTResp_2.color="white"
        else:
            AUTResp_2.color="black"
        """
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys();
        n = keys.length;
        i = 0;

        Diff = (globalClock.getTime() - startTime);
        timeRemaining = (AUTtime - Math.floor((Diff / 1)));
        Minutes = Number.parseInt((timeRemaining / 60.0));
        Seconds = Number.parseInt((timeRemaining - (Minutes * 60.0)));
        if ((Minutes < 10)) {
            minstring = ("0" + Minutes.toString());
        } else {
            minstring = Minutes.toString();
        }
        if ((Seconds < 10)) {
            secstring = ("0" + Seconds.toString());
        } else {
            secstring = Seconds.toString();
        }
        timeText = ((minstring + ":") + secstring);

        while ((i < n)) {
            if ((((keys[i] === "return") && (Resptext.length >= 1)) || (timeRemaining <= 0))) {
                continueRoutine = false;
                break;
            } else if (((keys[i] === "space") && (Resptext.length < 80))) {
                Resptext += " ";
                i = (i + 1);
            } else if ((keys[i] === "backspace")) {
                Resptext = Resptext.slice(0, (- 1));
                i = (i + 1);
            } else if ((keys[i] === "capslock")) {
                if ((CAPS === true)) {
                    CAPS = false;
                } else if ((CAPS === false)) {
                    CAPS = true;
                }
                i = (i + 1);
            } else if (((keys[i] === "period") && (Resptext.length < 80))) {
                Resptext += ".";
                i = (i + 1);
            } else if (((keys[i] === "minus") && (Resptext.length < 80))) {
                Resptext += "-";
                i = (i + 1);
            } else if (((keys[i] === "comma") && (Resptext.length < 80))) {
                Resptext += ",";
                i = (i + 1);
            } else if (_pj.in_es6(keys[i], ["lshift", "rshift"])) {
                shift_flag = true;
                i = (i + 1);
            } else if (((keys[i] === "semicolon") && (Resptext.length < 80))) {
                if ((shift_flag === false)) {
                    Resptext += ";";
                } else {
                    Resptext += ":";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if (((keys[i] === "apostrophe") && (Resptext.length < 80))) {
                if ((shift_flag === false)) {
                    Resptext += "'";
                } else {
                    Resptext += "\"";
                    shift_flag = false;
                }
                i += 1;
            } else if (((keys[i] === "slash") && (Resptext.length < 80))) {
                if ((shift_flag === false)) {
                    Resptext += "/";
                } else {
                    Resptext += "?";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if ((((keys[i] === "1") && (Resptext.length < 80)) && (shift_flag === true))) {
                    Resptext += "!";
                    shift_flag = false;
                    i = (i + 1);
            } else {
                if (((Resptext.length < 80) && (keys[i].length === 1))) {
                    Key = keys[i];
                    if ((CAPS || shift_flag)) {
                        Resptext += Key.toUpperCase();
                        shift_flag = false;
                    } else {
                        Resptext += Key;
                    }
                 }
                 Key = undefined;
                 i = (i + 1);
            }
        }

        if ((timeRemaining <= 0)) {
            AUTresps.finished = true;
            continueRoutine = false;
            countdownStarted = false;
        }
      End JS Routine:
        if (key_respAUT.rt) {
            RT1stKP = key_respAUT.rt[0];
            RTLastKP = key_respAUT.rt.slice((- 1))[0];
        }

        psychoJS.experiment.addData("AUTresp", Resptext)
        psychoJS.experiment.addData("AUTRT1stKP", RT1stKP)
        psychoJS.experiment.addData("AUTRTLastKP", RTLastKP)
        psychoJS.experiment.addData("AUTcue", cue)
        Resptext = ''
      End Routine:
        #extract the 1st and last key presses
        if len(key_respAUT.rt)>0:
            RT1stKP=key_respAUT.rt[0]
            RTLastKP=key_respAUT.rt[-1]

        #save the data for this trial
        thisExp.addData("AUTresp", Resptext)
        thisExp.addData("AUTRT1stKP", RT1stKP)
        thisExp.addData("AUTRTLastKP", RTLastKP)
        Resptext = ''
    TextComponent timeText_1
      letterHeight = 0.1
      pos = (0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    KeyboardComponent key_respAUT
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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Flow
  Routine AUTinstrux
  LoopInitiator AUTtrials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Box'},
      {'cue': 'Rope'}]
    Routine AUTblank
    LoopInitiator AUTresps loopType="TrialHandler"
      loopType = sequential
      nReps = 100
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      Routine AUT
    LoopTerminator AUTresps
  LoopTerminator AUTtrials
