PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DrawingtoImage
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine routine_1
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    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        import os
        from os import listdir
        import csv
        import pandas as pd
        import math
        import glob
      Begin Experiment:
        Files=glob.glob("DrawingData/*.txt")
        TotalFiles=len(Files)
        Pnum=0
      Begin Routine:
        Skip=False

        df = pd.read_csv(Files[Pnum],sep='\t',header=(0))
        TotalDrawingsNum=len(df)

        TrialNum=0
        Pnum+=1

        participant=df.iloc[TrialNum,3];
        NewId=df.iloc[TrialNum,4];
         # #### prepare directories, folders ###
        cwd = os.getcwd()
        log_dir = cwd + "\\log\\" + "P" + str(NewId) + "_" + str(participant)
        sketch_dir = log_dir
         # ### create UPN-individual log-path, log-directories and folders ###
        if os.path.exists(log_dir):  #if the files already exist, skip that participant
            Skip=True
            continueRoutine = False

        if not os.path.exists(log_dir):
            os.makedirs(log_dir)

        if not os.path.exists(sketch_dir):
            os.makedirs(sketch_dir)
    StaticComponent ISI
      saveData = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import time
        from PIL import Image

        # following is for drawing task to crop the image at the right dimensions
        H=win.size[1] #get the screen height
        W=win.size[0] #get the screen width
        #get pixel coordinates to crop drawings at after screenshot
        #image presented is 0.6 * height
        Top=(H-(H*0.6))/2 #top coordinate of cropped image
        Bottom=H-Top #the bottom
        Left= (W-(H*0.6))/2#Width minus image size, divided by 2
        Right= W-Left

        Label=""
      Begin Routine:
        if Skip:
            continueRoutine=False
            trials.finished=True

        StartImage=df.iloc[TrialNum,2];
        Lines=df.iloc[TrialNum,1]
        Circles=df.iloc[TrialNum,0]
        if "Labels" in df:
            Label=df.iloc[TrialNum,5]
        I=0
        End=False
        polygon_vertex=[]
        #AAA= visual.ShapeStim(win, vertices=polygon_vertex, closeShape=False,
        #                                         fillColor=None, lineWidth=4, lineColor='black')
        #AAA.setAutoDraw(True)
        #AAA.draw()


        #Make filename for current drawing draft
        CurrentDraw=str(StartImage)
        pic_draft = "P" + str(participant) + "_" + CurrentDraw + "_draft.png"
        #Copy the current stimulus image to the sketch directory, with new filename
        ShowIm = "Images\\Image" + CurrentDraw + ".png"
        #label new draft with file destination
        Draw = sketch_dir + "\\" + pic_draft
        polygon_list = []
        circleList=[]
        Line=0
        Circle=0
        CircleEdges=99
        CircleSize=0.004



        Lines2=eval(Lines)
        Circles2=eval(Circles)

        if len(Lines2)<2 :
            Lines2=[[0,0]]

        if len(Circles2)<2 :
            Circles2=[[0,0]]

        TrialNum+=1

        TEXTWRITE=""

        FirstFrame=True
      Each Frame:
        if not FirstFrame:

            win.flip()

            time.sleep(0.1)

            if Line<len(Lines2):
                polygon_vertex=Lines2[Line];
                #Add the new polygon to the list
                polygon_list.append(visual.ShapeStim(win, vertices=polygon_vertex, closeShape=False,
                                                   fillColor=None, lineWidth=4, lineColor='black'))
                Line+=1

            if Circle<len(Circles2) :
                CircleX= visual.ShapeStim(win, units='',
                lineWidth=4, lineColor='black', lineColorSpace='rgb',
                fillColor=None, fillColorSpace='rgb',
                vertices=((- 0.5, 0), (0, 0.5), (0.5, 0)),
                windingRule=None, closeShape=True, pos=Circles2[Circle],
                size=CircleSize, ori=0.0, opacity=1.0,
                contrast=1.0, depth=0,
                interpolate=True, name=None,
                autoLog=None, autoDraw=True)
                CircleX.setAutoDraw(True);
                Circle+=1;
                circleList.append(CircleX)

                ### Update Screen with lines #####
                #Draw all images, and prep back image so screenshot works
            image1.draw()
                ## Draw every polygon done so far
            for poly in polygon_list: #for all drawn shapes including current one
                poly.setAutoDraw(True)
                poly.draw()
            for circ in circleList: #for all drawn shapes including current one
                circ.setAutoDraw(True)
                circ.draw()


            if Line==len(Lines2) and Circle==len(Circles2):
                    #### Take screenshot and crop this screenshot to get image
                win.getMovieFrame(buffer='back')
                win.saveMovieFrames(Draw)
                img=Image.open(Draw)
                area = (Left,Top,Right,Bottom)
                cropped_img = img.crop(area)
                img=cropped_img.save(Draw) #draft
                win.flip()
                time.sleep(0.1)
                continueRoutine = False

        FirstFrame=False
      End Routine:
        for i_pol in range(len(polygon_list)):
            polygon_list[i_pol].setAutoDraw(False)
        for i_pol in range(len(circleList)):
            polygon_list[i_pol].setAutoDraw(False)

        #thisExp.addData('Line', Lines2[Line])
    ImageComponent image1
      image [set every frame] = $ShowIm
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    BrushComponent brush
      buttonRequired = True
      lineWidth = 3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text
      letterHeight = 0.05
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $(str(NewId)+ "_" + str(participant) + " : " + CurrentDraw)
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    TextComponent text_5
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every frame] = $(Label)
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  Routine blankroutine
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Flow
  Routine blankroutine
  LoopInitiator Participantsloop loopType="TrialHandler"
    loopType = sequential
    nReps = $TotalFiles
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    Routine routine_1
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = $TotalDrawingsNum
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      Routine trial
    LoopTerminator trials
  LoopTerminator Participantsloop
