PsychoPy2experiment version="2026.1.3"
Settings
  Experiment info = {'participant': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = DrawingTask2020
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine _settings
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    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        from PIL import Image
        import time
        import shutil          #copy & C
        import numpy as np
        win.mouseVisible = False

        #CHANGE DEBUG TO TRUE TO REDUCE TIMES OF EVERYTHING
        #SEE BELOW TO ADJUST TIMES MANUALLY
        SketchTime=3

        Pnum=int(float(expInfo['participant']))
        Prac=True


        ElaborationPhase=False

          # #############################
         # ### create dirs and folders ###
          # #############################

         # #### prepare directories, folders ###
        cwd = os.getcwd()
        log_dir = cwd + "\\log\\" + "P" + expInfo['participant']
        sketch_dir = log_dir + "\\draft"
        elab_dir = log_dir + "\\elab"

         # ### create UPN-individual log-path, log-directories and folders ###
        if not os.path.exists(log_dir):
            os.makedirs(log_dir)

        if not os.path.exists(sketch_dir):
            os.makedirs(sketch_dir)

        if not os.path.exists(elab_dir):
            os.makedirs(elab_dir)

        # following is for drawing task to crop the image at the right dimensions
        H=win.size[1] #get the screen height
        W=win.size[0] #get the screen width
        #get pixel coordinates to crop drawings at after screenshot
        #image presented is 0.6 * height, so height * 0.4 is the amount of screen left
        Top=(H-(H*0.6))/2 #top coordinate of cropped image
        Bottom=H-Top #the bottom
        Left= (W-(H*0.6))/2#Width minus image size, divided by 2
        Right= W-Left
      Begin JS Experiment:
        document.body.style.cursor='cursorurl';
        Pnum = Number.parseInt(Number.parseFloat(expInfo["participant"]));
        CountBal = (Pnum % 4);

        Prac=true;
        SketchTime=3

        ElaborationPhase = false;
        // don't need to do any file rearranging in the javascript

        class ShapeStimCustom extends visual.ShapeStim {
          _getPixiPolygon() {
            super._getPixiPolygon()
            this._pixiPolygon_px.closeStroke = this._closeShape;
            return this._pixiPolygon_px;
          }
        }


        Empty_shapes = 100;
        range = (start, stop, step = 1) =>
          Array(Math.ceil((stop - start) / step)).fill(start).map((x, y) => x + y * step)


        roundOne = (n, d) => Math.round(n * Math.pow(10, d)) / Math.pow(10, d)

        RepArray = (K,n=1) => Array.from({length:n}).map(x => K)
  Routine cross
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    PolygonComponent polygon_4
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    CodeComponent code_12
      Code Type = Both
      Begin JS Routine:
        if (Prac) {
            var NUM=2;
            CurrentDraw = NUM.toString();
            Prac=false;
        } else {
            CurrentDraw = DrawStim.toString();
        }

        stim = (("Images/Image" + CurrentDraw) + ".png");
        ShowIm = stim;

        document.body.style.cursor = 'cursorurl';
      Begin Routine:
        # ### Copy&Rename all TTCT(orig)-Files ###

        #Make filename for current drawing draft
        if Prac:
            CurrentDraw=str(2)
            pic_draft = "P" + expInfo['participant'] + "_" + CurrentDraw + "_Practise.png"
            Prac=False
        #Copy the current stimulus image to the sketch directory, with new filename
        else:
            CurrentDraw=str(DrawStim)
            pic_draft = "P" + expInfo['participant'] + "_" + CurrentDraw + "_draft.png"

        #Copy the current stimulus image to the sketch directory, with new filename
        stim="Images\Image"+CurrentDraw+".png"
        #label new draft with file destination
        Draw = sketch_dir + "\\" + pic_draft
        ShowIm=stim



        win.mouseVisible = True
  Routine DrawInstrux
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    TextComponent DrawinstrucText
      letterHeight = 0.045
      pos = [0, 0.1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        The next task is a Drawing Task.

        In the Drawing Task, you will be presented with a series of incomplete shapes.

        Using each shape, you must produce the most creative drawing you can think of (the incomplete shape must be used as part of your drawing).

        Your drawings don't have to be pretty: they should simply show how creative and interesting your ideas are.
    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent EnterToContinue_2
      letterHeight = 0.025
      pos = (0, -0.375)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue
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  Routine cross_prac
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    PolygonComponent polygon
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        var NUM=2
        CurrentDraw = NUM.toString();
        stim = (("Images/Image" + CurrentDraw) + ".png");

        ShowIm = stim;
        ImageNum += 1;
        document.body.style.cursor = 'cursorurl';
      Begin Routine:
        # ### Copy&Rename all TTCT(orig)-Files ###

        #Make filename for current drawing draft
        CurrentDraw=str(2)
        pic_draft = "P" + expInfo['participant'] + "_" + CurrentDraw + "_Practise.png"
        #Copy the current stimulus image to the sketch directory, with new filename
        stim="Images\Image"+CurrentDraw+".png"
        shutil.copyfile(stim, sketch_dir + "\\" + pic_draft)
        #label new draft with file destination
        Draw = sketch_dir + "\\" + pic_draft
        ShowIm=stim
        ImageNum+=1


        win.mouseVisible = True
  Routine Drawing_Prac
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    ImageComponent image1_2
      image [set every repeat] = $ShowIm
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        import math
      Begin JS Routine:
        polygon_vertex = [[0, 0]];
        polygon_list = [];
        let i

        Empty_shapes = 100;
        //for  (i = 0; i < Empty_shapes; i++) {
        //    let i_polygon = new visual.ShapeStim({win: psychoJS.window,
        //    closeShape: false,
        //    //fillColor: 'None',
        //    //vertices: polygon_vertex,
        //    closeShape: false,
        //   // autoLog: true,
        //    //autoDraw: true,
        //    lineWidth: 4, lineColor: new util.Color([-1, -1, -1])});
        //    i_polygon.setAutoDraw(true);
        //    polygon_list.push(i_polygon);
        //}

        i_polygon = new visual.ShapeStim({win: psychoJS.window,
            closeShape: false,
            lineWidth: 4, lineColor: new util.Color([-1, -1, -1])});
         i_polygon.setAutoDraw(true);
         polygon_list.push(i_polygon);

        indx_shape = 0;
        Drawing = false;
        FirstUndoClick = true;
        Exit = false;
        Actionsincldel = 0;
        ActionsNotincldel = 0;
        NoDels = 0;
        DrawRTs = [];
        DelRTs = [];
        LineLengths = [];
        LineDurations = [];

        if ((ElaborationPhase === true)) {
            TimeLim = elab_time;
        } else {
            TimeLim = sketch_time;
        }

        startTime = globalClock.getTime();
        timeText="00:30"
      Begin Routine:
        ##### Prepare some variables ######
        polygon_vertex = [(0,0)]
        polygon_list = []

        Empty_shapes = 100
        for i in range(Empty_shapes):
            polygon_list.append(visual.ShapeStim(win, vertices=polygon_vertex, closeShape=False,
                                                 fillColor=None, lineWidth=4, lineColor='black'))

        indx_shape = 0      # How many lines drawn so far
        Drawing = False #variable necessary to only add new lines when mouse stops being clicked, and to initialise
        #new lines when mouse is clicked again
        FirstUndoClick=True #this variable stops Undo from deleting multiple lines for as long as Undo button is clocked
        Exit=False # tells the task to take a screenshot and move on, when time limit reached

        # Prep some  Measurement vars
        Actionsincldel=0 #number of actions (lines drawn) including deleted ones
        ActionsNotincldel=0 #number of actions (lines drawn) not including deletes
        NoDels=0
        DrawRTs=[]
        DelRTs=[]
        LineLengths=[]
        LineDurations=[]

        if ElaborationPhase==True:
            TimeLim=elab_time
        else:
            TimeLim=sketch_time

        ### GET TIMER READY ####
        startTime=globalClock.getTime()
      Each Frame:
        ###Timer#####
        Diff=globalClock.getTime()-startTime
        timeRemaining = sketch_time-math.floor(Diff/1) #this gives us a whole number for time
        #remaining, using floor not round since we do not want the seconds to update except when the timeremaining crosses an actual whole integer
        Minutes = int(timeRemaining/60.0) # the integer number of minutes
        Seconds = int(timeRemaining - (Minutes * 60.0))
        if Minutes<10:
            minstring='0' + str(Minutes)
        else:
            minstring=str(Minutes)
        if Seconds<10:
            secstring='0' + str(Seconds)
        else:
            secstring=str(Seconds)
        timeText = minstring + ':' + secstring # create a string of characters representing the time
        if timeRemaining<=0:
            Exit=True

        ######### START DRAWING TASK ##########
        # For some reason current polygon must be worked on individually, but isn't save back to polygon_list...
        polygon = polygon_list[indx_shape]

        ### DRAW LINES #####
        # If mouse is clicked, start/continue drawing
        if mymouse.isPressedIn(image1):

            # If mouse just clicked, start a new line (polygon), record RT
            if not Drawing:
                polygon_vertex = []
                Drawing = True #Prepare to recognise when mouse is not clicked
                DrawRTs.append(globalClock.getTime()-startTime) #record RTs
                LineStartTime=globalClock.getTime()

            # Otherwise, update current polygon, with current mouse position
            polygon_vertex.append(mymouse.getPos())
            polygon.vertices = polygon_vertex
        elif Drawing: #Once mouse stops being clicked, move on to next polygon
                Drawing = False
                LineLengths.append(len(polygon.vertices))
                LineDurations.append(globalClock.getTime()-LineStartTime)
                indx_shape += 1 #move on to a new shape
                Actionsincldel +=1 #increase number of actions
                ActionsNotincldel +=1 #increase number of actions


        ### Undo Button #####
        if mymouse.isPressedIn(UndoButton) and FirstUndoClick and indx_shape>0: #So one click at a time will remove one shape
            UndoButton.fillColor='white'
            indx_shape -= 1 #go back to previous shape
            polygon = polygon_list[indx_shape]
            polygon.vertices = [(0,0)] #Set current polygon back to previous one, and return to an empty set
            FirstUndoClick=False
            NoDels+=1  #increase number of deletes
            DelRTs.append(globalClock.getTime()-startTime)#record RTs
            ActionsNotincldel -=1 #decrease number of actions
        elif not mymouse.isPressedIn(UndoButton):
            UndoButton.fillColor='darkgray'
            FirstUndoClick=True


        ### Update Screen with lines #####
        #Draw all images, and prep back image so screenshot works
        image1.draw()
        ## Draw every polygon done so far
        for i_pol in range(indx_shape+1): #for all drawn shapes including current one
            polygon_list[i_pol].setAutoDraw(True)
            polygon_list[i_pol].draw()


        if Exit:
            #### Take screenshot and crop this screenshot to get image
            win.getMovieFrame(buffer='back')
            win.saveMovieFrames(Draw)
            img=Image.open(Draw)
            area = (Left,Top,Right,Bottom)
            cropped_img = img.crop(area)
            img=cropped_img.save(Draw) #draft
            continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        Diff = (globalClock.getTime() - startTime);
        timeRemaining = (sketch_time - Math.floor((Diff / 1)));
        Minutes = Number.parseInt((timeRemaining / 60.0));
        Seconds = Number.parseInt((timeRemaining - (Minutes * 60.0)));
        if ((Minutes < 10)) {
            minstring = ("0" + Minutes.toString());
        } else {
            minstring = Minutes.toString();
        }
        if ((Seconds < 10)) {
            secstring = ("0" + Seconds.toString());
        } else {
            secstring = Seconds.toString();
        }
        timeText = ((minstring + ":") + secstring);

        if ((timeRemaining <= 0)) {
            Exit = true;
        }
        polygon = polygon_list[indx_shape];
        if (mymouse.isPressedIn(image1)) {
            if ((! Drawing)) {
                polygon_vertex = [];
                Drawing = true;
                DrawRTs.push(globalClock.getTime() - startTime);
                LineStartTime = globalClock.getTime();
            }
            polygon_vertex.push(mymouse.getPos());
            polygon.setVertices(polygon_vertex);
        } else {
            if (Drawing) {
                Drawing = false;
                LineLengths.push(polygon.vertices.length);
                LineDurations.push((globalClock.getTime() - LineStartTime));
                indx_shape += 1;
                Actionsincldel += 1;
                ActionsNotincldel += 1;
                i_polygon = new visual.ShapeStim({win: psychoJS.window,
                closeShape: false,
                lineWidth: 4, lineColor: new util.Color([-1, -1, -1])});
                i_polygon.setAutoDraw(true);
                polygon_list.push(i_polygon);
            }
        }
        if (((mymouse.isPressedIn(UndoButton) && FirstUndoClick) && (indx_shape > 0))) {
            UndoButton.fillColor = "white";
            indx_shape -= 1;
            polygon = polygon_list[indx_shape];
            polygon.vertices = [[0, 0]];
            FirstUndoClick = false;
            NoDels += 1;
            DelRTs.push((globalClock.getTime() - startTime));
            ActionsNotincldel -= 1;
        } else {
            if ((! mymouse.isPressedIn(UndoButton))) {
                UndoButton.fillColor = "darkgray";
                FirstUndoClick = true;
            }
        }
        image1.draw();
        for (var i_pol = 0, _pj_a = (indx_shape + 1); (i_pol < _pj_a); i_pol += 1) {
            polygon_list[i_pol].setAutoDraw(true);
            polygon_list[i_pol].draw();
        }
        if (Exit) {
            continueRoutine = false;
        }
      End JS Routine:
        if ((ElaborationPhase === true)) {
            psychoJS.experiment.addData("DrawingName", pic_elab)
        } else {
            psychoJS.experiment.addData("DrawingName", pic_draft)
        }
            psychoJS.experiment.addData("ActionsNotincldel", ActionsNotincldel)
            psychoJS.experiment.addData("Actionsincldel", Actionsincldel)
            psychoJS.experiment.addData("NoDels", NoDels)
            psychoJS.experiment.addData("DrawRTs", DrawRTs)
            psychoJS.experiment.addData("DelRTs", DelRTs)
            psychoJS.experiment.addData("LineLengths", LineLengths)
            psychoJS.experiment.addData("LineDurations", LineDurations)

        for (var i_pol = 0, _pj_a = polygon_list.length; (i_pol < _pj_a); i_pol += 1) {
            polygon_list[i_pol].setAutoDraw(false);
            addname = ("Line" + i_pol.toString());
            psychoJS.experiment.addData(addname, polygon_list[i_pol].vertices.tolist())
        }
        psychoJS.experiment.addData("StartImage", CurrentDraw)
      End Routine:
        #Store vars in Excel
        if ElaborationPhase== True:
            thisExp.addData('DrawingName', pic_elab)
        else:
            thisExp.addData('DrawingName', pic_draft)
        thisExp.addData('ActionsNotincldel', ActionsNotincldel)
        thisExp.addData('Actionsincldel', Actionsincldel)
        thisExp.addData('NoDels', NoDels)
        thisExp.addData('DrawRTs', DrawRTs)
        thisExp.addData('DelRTs', DelRTs)
        thisExp.addData('LineLengths', LineLengths)
        thisExp.addData('LineDurations', LineDurations)

        for i_pol in range(len(polygon_list)):
            polygon_list[i_pol].setAutoDraw(False)
            addname="Line" + str(i_pol)
            thisExp.addData(addname, polygon_list[i_pol].vertices.tolist())
        thisExp.addData('StartImage', CurrentDraw)
        thisExp.addData('ActionsNotincldel', ActionsNotincldel)
    MouseComponent mymouse_2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveParamsClickable = name,UndoButton
      saveStartStop = False
      startVal [time (s)] = 0
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    PolygonComponent UndoButton_2
      fillColor = darkgray
      pos = (-0.5, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.24, 0.12)
      startVal [time (s)] = 0
      units = height
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    TextComponent UndoText_2
      color = black
      letterHeight = 0.04
      pos = (-0.5, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Undo Last
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    TextComponent timer_2
      letterHeight = 0.08
      pos = (0.5, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $timeText
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  Routine DrawInstrux_2
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    TextComponent DrawinstrucText_2
      letterHeight = 0.045
      pos = [0, 0.1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        That was the practise. Next are the 10 real trials.

        Remember- Using each shape, you must produce the most creative drawing you can think of (the incomplete shape must be used as part of your drawing).

        Your drawings don't have to be pretty: they should simply show how creative and interesting your ideas are.

        You have 30 seconds per drawing, and should use all this time to work on your drawing.
    TextComponent EnterToContinue_3
      letterHeight = 0.025
      pos = (0, -0.375)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to begin
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        Prac=0;
      Begin Routine:
        Prac=0;
  Routine DrawInstrux_3
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        Prac=1;
      Begin Routine:
        Prac=1;
    TextComponent DrawinstrucText_3
      letterHeight = 0.045
      pos = [0, 0.1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        You do not need to write a label for your drawing.

        You will draw using the mouse, and will have 30 seconds to complete you drawing.
        Please use all the time available to work on the most creative drawing you can.

        First, you will complete a 30 second practise drawing.
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent EnterToContinue
      letterHeight = 0.025
      pos = (0, -0.375)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to begin the practise
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  Routine Fake_Trial
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    ImageComponent image_2
      image = Images/Image2.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image = Images/Image3.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_4
      image = Images/Image4.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_5
      image = Images/Image5.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_9
      image = Images/Image9.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_13
      image = Images/Image13.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_16
      image = Images/Image16.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_18
      image = Images/Image18.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_23
      image = Images/Image23.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_26
      image = Images/Image26.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_28
      image = Images/Image28.png
      opacity = 0
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine DrawingTrial
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    ImageComponent image1
      image [set every repeat] = $ShowIm
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        import math
      Begin JS Routine:
        class ShapeStimCustom extends visual.ShapeStim {
          _getPixiPolygon() {
            super._getPixiPolygon()
            this._pixiPolygon_px.closeStroke = this._closeShape;
            return this._pixiPolygon_px;
          }
        }

        polygon_vertex = [[0, 0]];
        polygon_vertex = [];
        polygon_list = [];
        Empty_shapes = 100;
        for (var i = 0, _pj_a = Empty_shapes; (i < _pj_a); i += 1) {
            let i_polygon = new ShapeStimCustom({win: psychoJS.window,
            "vertices": polygon_vertex,
            "closeShape": false,
            "lineWidth": 4,
            lineColor: new util.Color([-1, -1, -1])});
            i_polygon.setAutoDraw(false);
            polygon_list.push(i_polygon);
        }

        CircleListList = [];
        CircleList=[];
        CircleCordsList=[];

        CircleSize=[0.004,0.004];
        CircleEdges=99;
        CircleOpac=1;

        indx_shape = 0;
        Drawing = false;
        FirstUndoClick = true;
        Exit = false;
        Actionsincldel = 0;
        ActionsNotincldel = 0;
        NoDels = 0;
        DrawRTs = [];
        DelRTs = [];
        LineLengths = [];
        LineDurations = [];

        startTime = globalClock.getTime();
        Diff=0
        timeRemaining=SketchTime
      Begin Routine:
        ##### Prepare some variables ######
        polygon_vertex = [(0,0)]
        polygon_list = []

        Empty_shapes = 100
        for i in range(Empty_shapes):
            polygon_list.append(visual.ShapeStim(win, vertices=polygon_vertex,closeShape=False,
                                                 fillColor=None, lineWidth=4, lineColor='black'))

        indx_shape = 0      # How many lines drawn so far
        Drawing = False #variable necessary to only add new lines when mouse stops being clicked, and to initialise
        #new lines when mouse is clicked again
        FirstUndoClick=True #this variable stops Undo from deleting multiple lines for as long as Undo button is clocked
        Exit=False # tells the task to take a screenshot and move on, when time limit reached

        # Prep some  Measurement vars
        Actionsincldel=0 #number of actions (lines drawn) including deleted ones
        ActionsNotincldel=0 #number of actions (lines drawn) not including deletes
        NoDels=0
        DrawRTs=[]
        DelRTs=[]
        LineLengths=[]
        LineDurations=[]


        ### GET TIMER READY ####
        startTime=globalClock.getTime()

        timeRemaining=SketchTime
      Each Frame:

        ###Timer#####
        Diff=globalClock.getTime()-startTime
        timeRemaining = SketchTime-math.floor(Diff) #this gives us a whole number for time
        #remaining, using floor not round since we do not want the seconds to update except when the timeremaining crosses an actual whole integer
        Minutes = int(timeRemaining/60.0) # the integer number of minutes
        Seconds = int(timeRemaining - (Minutes * 60.0))
        if Minutes<10:
            minstring='0' + str(Minutes)
        else:
            minstring=str(Minutes)
        if Seconds<10:
            secstring='0' + str(Seconds)
        else:
            secstring=str(Seconds)
        timeText = minstring + ':' + secstring # create a string of characters representing the time
        if timeRemaining<=0:
           Exit=True

        ######### START DRAWING TASK ##########
        # For some reason current polygon must be worked on individually, but isnt't saved back to polygon_list...
        polygon = polygon_list[indx_shape]
        ### DRAW LINES #####
        # If mouse is clicked, start/continue drawing
        if mymouse.isPressedIn(image1):
         # If mouse just clicked, start a new line (polygon), record RT
            if not Drawing:
                polygon_vertex = []
                Drawing = True #Prepare to recognise when mouse is not clicked
                DrawRTs.append(globalClock.getTime()-startTime) #record RTs
                LineStartTime=globalClock.getTime()

             # Update current polygon, with current mouse position
            polygon_vertex.append(mymouse.getPos())
            polygon.vertices = polygon_vertex
        elif Drawing: #Once mouse stops being clicked, move on to next polygon
                Drawing = False
                LineLengths.append(len(polygon.vertices))
                LineDurations.append(globalClock.getTime()-LineStartTime)
                indx_shape += 1 #move on to a new shape
                Actionsincldel +=1 #increase number of actions
                ActionsNotincldel +=1 #increase number of actions


            ### Undo Button #####
        if mymouse.isPressedIn(UndoButton) and FirstUndoClick and indx_shape>0: #So one click at a time will remove one shape
            UndoButton.fillColor='white'
            indx_shape -= 1 #go back to previous shape
            polygon = polygon_list[indx_shape]
            polygon.vertices = [(0,0)] #Set current polygon back to previous one, and return to an empty set
            FirstUndoClick=False
            NoDels+=1  #increase number of deletes
            DelRTs.append(globalClock.getTime()-startTime)#record RTs
            ActionsNotincldel -=1 #decrease number of actions
        elif not mymouse.isPressedIn(UndoButton):
            UndoButton.fillColor='darkgray'
            FirstUndoClick=True


        ### Update Screen with lines #####
        #Draw all images, and prep back image so screenshot works
        image1.draw()
        # Draw every polygon done so far
        for i_pol in range(indx_shape+1): #for all drawn shapes including current one
            polygon_list[i_pol].setAutoDraw(True)
            polygon_list[i_pol].draw()


        if Exit:
            #### Take screenshot and crop this screenshot to get image
            win.getMovieFrame(buffer='back')
            win.saveMovieFrames(Draw)
            img=Image.open(Draw)
            area = (Left,Top,Right,Bottom)
            cropped_img = img.crop(area)
            img=cropped_img.save(Draw) #draft
            continueRoutine = False
      Each JS Frame:
        var Diff, Minutes, Seconds, minstring, secstring, timeText, polygon;

        Diff = (globalClock.getTime() - startTime);
        timeRemaining = (SketchTime - Math.floor(Diff));
        Minutes = Number.parseInt((timeRemaining / 60.0));
        Seconds = Number.parseInt((timeRemaining - (Minutes * 60.0)));
        if ((Minutes < 10)) {
            minstring = ("0" + Minutes.toString());
        } else {
            minstring = Minutes.toString();
        }
        if ((Seconds < 10)) {
            secstring = ("0" + Seconds.toString());
        } else {
            secstring = Seconds.toString();
        }

        timeText = ((minstring + ":") + secstring);
        //timeText = (ImageNum.toString() + "     " + ImageOrder[1].toString());

        if ((timeRemaining <= 0)) {
            Exit = true;
            continueRoutine = false;
        }
        polygon = polygon_list[indx_shape];
        if (mymouse.isPressedIn(image1)  && (timeRemaining > 0)) {
           LastMouse=MousePos;
            MousePos=mymouse.getPos();
            if ((! Drawing)) {
                Drawing = true;
                polygon_vertex = [];
                DrawRTs.push(globalClock.getTime() - startTime);
                LineStartTime = globalClock.getTime();
                //draw a circle
                CircleX = new visual.Polygon ({
                win: psychoJS.window,
                name: 'polygon_2', units : 'height',
                edges: CircleEdges,
                size: CircleSize,
                ori: 0,
                pos: MousePos,
                lineWidth: 1,
                lineColor: new util.Color([-1, -1, -1]),
                fillColor: new util.Color([-1, -1, -1]),
                opacity: 1, depth: -1, interpolate: true,});
                CircleX.setAutoDraw(true);
                CircleList.push(CircleX); //draw a first circle, and push it to CircleList
                CircleCordsList.push(MousePos);
            } //and if already drawing
            polygon_vertex.push(mymouse.getPos());
            polygon.setVertices(polygon_vertex);
            if (LastMouse!=MousePos) {
                //if coords have changed,
            //draw another circle
                CircleX = new visual.Polygon ({
                win: psychoJS.window,
                name: 'polygon_2', units : 'height',
                edges: CircleEdges,
                size: CircleSize,
                ori: 0,
                pos: MousePos,
                lineWidth: 1,
                lineColor: new util.Color([-1, -1, -1]),
                fillColor: new util.Color([-1, -1, -1]),
                opacity: 1, depth: -1, interpolate: true,});
                CircleX.setAutoDraw(true);
                CircleList.push(CircleX); //draw a first circle, and push it to CircleList
            }
        } else { //mouse stops being clicked
            if (Drawing) {
                Drawing = false;
                LineLengths.push(polygon.vertices.length);
                LineDurations.push((globalClock.getTime() - LineStartTime));
                indx_shape += 1;
                Actionsincldel += 1;
                ActionsNotincldel += 1;
                CircleListList.push(CircleList); //add new set of circles to circle list
                CircleList=[];
            }
        }
        if (((mymouse.isPressedIn(UndoButton) && FirstUndoClick) && (indx_shape > 0))) {
            //UndoButton.fillColor = "white";
            indx_shape -= 1;
            polygon = polygon_list[indx_shape];
            polygon.vertices = [[0, 0]];
            FirstUndoClick = false;
            NoDels += 1;
            DelRTs.push((globalClock.getTime() - startTime));
            ActionsNotincldel -= 1;

            // set older circles to be not drawn
            for (var i_pol2 = 0, _pj_a2 = (CircleListList[indx_shape].length); (i_pol2 < _pj_a2); i_pol2 += 1) {
            CircleListList[indx_shape][i_pol2].setAutoDraw(false);
            CircleListList[indx_shape][i_pol2].opacity = 0;
            }
            //remove last list of circles
            CircleListList[indx_shape]=[];
            CircleListList.pop();
            CircleCordsList.pop();//and list of coords

        } else if ((! mymouse.isPressedIn(UndoButton))) {
                //UndoButton.fillColor = "darkgray";
                FirstUndoClick = true;
            }


        image1.draw();
        for (var i_pol = 0, _pj_a = (indx_shape + 1); (i_pol < _pj_a); i_pol += 1) {
            polygon_list[i_pol].setAutoDraw(true);
            polygon_list[i_pol].draw();
        }
        //if (Exit) {
        //    continueRoutine = false;
        //}
      End JS Routine:
        var addname, NoCircs, Temp
        psychoJS.experiment.addData("StartImage", CurrentDraw)

        AllPolygonVertices=[]

        psychoJS.experiment.addData("ActionsNotincldel", ActionsNotincldel)
        psychoJS.experiment.addData("Actionsincldel", Actionsincldel)
        psychoJS.experiment.addData("NoDels", NoDels)
        psychoJS.experiment.addData("DrawRTs", DrawRTs)
        psychoJS.experiment.addData("DelRTs", DelRTs)
        psychoJS.experiment.addData("LineLengths", LineLengths)
        psychoJS.experiment.addData("LineDurations", LineDurations)

        for (var i_pol = 0, _pj_a = indx_shape; (i_pol < _pj_a); i_pol += 1) {
            polygon_list[i_pol].setAutoDraw(false);
            //Temp=polygon_list[i_pol].vertices;
            //Temp=Temp.toString()
            AllPolygonVertices.push(polygon_list[i_pol].vertices);
            //addname = ("Line" + i_pol.toString());
            //psychoJS.experiment.addData(addname, polygon_list[i_pol].vertices)
        }

        for (var i_pol = 0, _pj_a = (CircleListList.length); (i_pol < _pj_a); i_pol += 1) {
            NoCircs=CircleListList[i_pol].length;
            for (var i_pol2 = 0, _pj_a2 = NoCircs; (i_pol2 < _pj_a2); i_pol2 += 1) {
            CircleListList[i_pol][i_pol2].setAutoDraw(false);
            }
        }


        psychoJS.experiment.addData("Circles", CircleCordsList);
        psychoJS.experiment.addData("Lines", AllPolygonVertices)
        //clear all circles
        CircleList=[];
        CircleListList=[];
        //psychoJS.window.color = (0, 0, 0)
        //psychoJS.window.clearBuffer({"color": true})
        //psychoJS.window.depthMask = true
        //psychoJS.window.clearBuffer({"color": false, "depth": true, "stencil": false});
        //psychoJS.window.flip({"clearBuffer": true});
      End Routine:
        #Store vars in Excel
        if ElaborationPhase== True:
            thisExp.addData('DrawingName', pic_elab)
        else:
            thisExp.addData('DrawingName', pic_draft)
        thisExp.addData('ActionsNotincldel', ActionsNotincldel)
        thisExp.addData('Actionsincldel', Actionsincldel)
        thisExp.addData('NoDels', NoDels)
        thisExp.addData('DrawRTs', DrawRTs)
        thisExp.addData('DelRTs', DelRTs)
        thisExp.addData('LineLengths', LineLengths)
        thisExp.addData('LineDurations', LineDurations)

        for i_pol in range(len(polygon_list)):
            polygon_list[i_pol].setAutoDraw(False)
            addname="Line"+str(i_pol)
            thisExp.addData(addname, polygon_list[i_pol].vertices.tolist())
        thisExp.addData('StartImage', CurrentDraw)
        thisExp.addData('ActionsNotincldel', ActionsNotincldel)
    MouseComponent mymouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveParamsClickable = name,UndoButton
      saveStartStop = False
      startVal [time (s)] = 0
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    PolygonComponent UndoButton
      fillColor = darkgray
      pos = (-0.5, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.24, 0.12)
      startVal [time (s)] = 0
      units = height
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    TextComponent UndoText
      color = black
      letterHeight = 0.04
      pos = (-0.5, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Undo Last
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    TextComponent timer
      letterHeight = 0.05
      pos = (0.5, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $timeText
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Flow
  Routine _settings
  Routine Fake_Trial
  Routine DrawInstrux
  Routine DrawInstrux_3
  Routine cross
  Routine DrawingTrial
  Routine DrawInstrux_2
  LoopInitiator trials_draw loopType="TrialHandler"
    conditionsFile = DrawStims.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('DrawStim', 26)]),
      OrderedDict([('DrawStim', 13)]),
      OrderedDict([('DrawStim', 9)]),
      OrderedDict([('DrawStim', 3)]),
      OrderedDict([('DrawStim', 5)]),
      OrderedDict([('DrawStim', 28)]),
      OrderedDict([('DrawStim', 23)]),
      OrderedDict([('DrawStim', 4)]),
      OrderedDict([('DrawStim', 16)]),
      OrderedDict([('DrawStim', 18)])]
    Routine cross
    Routine DrawingTrial
  LoopTerminator trials_draw
