PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = FF
  keyboardBackend = ioHub
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Routines
  Routine FFinstrux
    TextComponent intrux
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        In the next task you will be shown a single word, and you must type the next word that follows from it in your mind.

        Once you type the word, it will be shown on the screen. You must then think of another word that follows from this word, and so on.

        Keep typing the next word that comes to mind after the previous word until the trial ends (after 20 words).

        Please type only single words, and avoid saying proper nouns such as names, cities, or brands (e.g., “John”, “Paris”, “Nike”).
    TextComponent EntertoContinue
      letterHeight = 0.03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press ENTER to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
        FFPrac=true
      Begin Routine:
        EscapeAllowed = True
        win.mouseVisible = False

        # defines practise trials true
        FFPrac=True
  Routine FFinstrux_2
    TextComponent intrux_2
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        First, you will complete a small practise.

        You'll be shown a single word, and have to think of the first word that comes to mind, and type it. Then you type the next word that follows from that word, until you make a small chain of associations.
    TextComponent EntertoContinue_2
      letterHeight = 0.03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press ENTER to begin.
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine FFinstrux_4
    TextComponent intrux_4
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        That is the end of the practise. Next are the real trials, which will be 19 words long. There will be 3 trials in total.

        Remember: you will be shown a single word, and you must type the next word that follows in your mind. Keep typing the next word that comes to mind after the previous word until the trial ends.

        Please type only single words, and avoid saying proper nouns such as names, cities, or brands (e.g., “John”, “Paris”, “Nike”).
    TextComponent EntertoContinue_4
      letterHeight = 0.03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press SPACE to begin
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        FFPrac=False
        FFtrialnum=0
  Routine FF
    CodeComponent FFcode_3
      Code Type = Both
      Begin Experiment:
        import math
        import pandas as pd

        CAPS=False
        firsttrial=True
      Begin JS Experiment:
        var CAPS, firsttrial;
        CAPS = false;
        firsttrial = true;
        FFcueword=" "
      Begin JS Routine:
        //is shift pressed?
        shift_flag = false;
        //#set response text as empty
        Resptext = "";
        FFrespDisp.setText(Resptext)
        Key=undefined;

        charlim=30

        //set 1st and last key press times
        RT1stKP=0;
        RTLastKP=0

        psychoJS.eventManager.clearKeys();

        if (FFPrac==true) {
            FFcueword="snow";
        }
        if (FFPrac==false) {
            FFcueword=FFcue;
        }

        if ((firsttrial === false)) {
            FFcueword = PrevResp;
        }
        firsttrial = false;
      Begin Routine:
        ##initiate variables
        #is shift pressed?
        shift_flag = False
        #set response text as empty
        Resptext = ''

        charlim=30

        #set 1st and last key press times
        RT1stKP=0
        RTLastKP=0

        event.clearEvents('keyboard')

        if FFPrac==True:
            FFcueword="snow"
        else:
            FFcueword=FFcue

        if firsttrial==False:
            FFcueword=PrevResp

        firsttrial=False
      Each Frame:
        keys = event.getKeys()
        n=len(keys)
        i=0


        ###### Text entry #####
        while i < n: # len(keys):
            #process each key depending on what it is
            if keys[i] == 'return' and len(Resptext)>=1:
                continueRoutine = False
                break
            elif keys[i] == 'escape' and EscapeAllowed == True:
                continueRoutine = False
                core.quit()
                break
            elif keys[i] == 'space' :
                Resptext += " "
                i += 1
            elif keys[i] == 'backspace' :
                Resptext = Resptext[:-1]
                i += 1
            elif keys[i] == 'capslock' :
                if CAPS==True:
                    CAPS= False
                elif CAPS==False:
                    CAPS=True
                i += 1
            elif keys[i] == 'period'and len(Resptext) < charlim:
                Resptext += "."
                i += 1
            elif keys[i] == 'minus' and len(Resptext) < charlim:
                Resptext += "-"
                i += 1
            elif keys[i] == 'comma' and len(Resptext) < charlim:
                Resptext += ","
                i = i + 1
            elif keys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1
            elif keys[i] == 'semicolon' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += ";"
                else:
                    Resptext += ":"
                    shift_flag = False
                i += 1
            elif keys[i] == 'apostrophe' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += "'"
                else:
                    Resptext += '"'
                i += 1
            elif keys[i] == 'slash' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += "/"
                else:
                    Resptext += '?'
                    shift_flag = False
                i = i + 1
            elif keys[i] == '1' and len(Resptext) < charlim and shift_flag == True:
                Resptext += "!"
                shift_flag = False
                i = i + 1
            else:
                if len(Resptext) < charlim and len(keys[i])==1:
                    Key=keys[i]
                    if CAPS or shift_flag:
                        Resptext += Key.upper()
                        shift_flag=False
                    else:
                        Resptext += Key
                i += 1
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);


        keys = psychoJS.eventManager.getKeys();
        n = keys.length;
        i = 0;


        // Text entry
        while ((i < n)) {
            if (((keys[i] === "return") && (Resptext.length >= 1))) {
                continueRoutine = false;
                break;
            } else if (((keys[i] === "space") && (Resptext.length < charlim))) {
                Resptext += " ";
                i = (i + 1);
            } else if ((keys[i] === "backspace")) {
                Resptext = Resptext.slice(0, (- 1));
                i = (i + 1);
            } else if ((keys[i] === "capslock")) {
                if ((CAPS === true)) {
                    CAPS = false;
                } else if ((CAPS === false)) {
                    CAPS = true;
                }
                i = (i + 1);
            } else if (((keys[i] === "period") && (Resptext.length < charlim))) {
                Resptext += ".";
                i = (i + 1);
            } else if (((keys[i] === "minus") && (Resptext.length < charlim))) {
                Resptext += "-";
                i = (i + 1);
            } else if (((keys[i] === "comma") && (Resptext.length < charlim))) {
                Resptext += ",";
                i = (i + 1);
            } else if (_pj.in_es6(keys[i], ["lshift", "rshift"])) {
                shift_flag = true;
                i = (i + 1);
            } else if (((keys[i] === "semicolon") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += ";";
                } else {
                    Resptext += ":";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if (((keys[i] === "apostrophe") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += "'";
                } else {
                    Resptext += "\"";
                    shift_flag = false;
                }
                i += 1;
            } else if (((keys[i] === "slash") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += "/";
                } else {
                    Resptext += "?";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if ((((keys[i] === "1") && (Resptext.length < charlim)) && (shift_flag === true))) {
                    Resptext += "!";
                    shift_flag = false;
                    i = (i + 1);
            } else {
                if (((Resptext.length < charlim) && (keys[i].length === 1))) {
                    Key = keys[i];
                    if ((CAPS || shift_flag)) {
                        Resptext += Key.toUpperCase();
                        shift_flag = false;
                    } else {
                        Resptext += Key;
                    }
                 }
                 Key = undefined;
                 i = (i + 1);
            }
        }
      End JS Routine:
        if (key_respFF.rt) {
            RT1stKP = key_respFF.rt[0];
            RTLastKP = key_respFF.rt.slice((- 1))[0];
        }

        psychoJS.experiment.addData("FFresp", Resptext)
        psychoJS.experiment.addData("FFRT1stKP", RT1stKP)
        psychoJS.experiment.addData("FFRTLastKP", RTLastKP)
        PrevResp=Resptext
        Resptext = ''
      End Routine:
        #extract the 1st and last key presses
        if len(key_respFF.rt)>0:
            RT1stKP=key_respFF.rt[0]
            RTLastKP=key_respFF.rt[-1]

        #save the data for this trial
        thisExp.addData("FFresp", Resptext)
        thisExp.addData("FFRT1stKP", RT1stKP)
        thisExp.addData("FFRTLastKP", RTLastKP)
        PrevResp=Resptext
        Resptext = ''
    TextComponent FFcueDisp
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $FFcueword
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos = (0, -0.2)
      shape = rectangle
      size = (0.45, 0.17)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_respFF
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    TextComponent FFrespDisp
      color = black
      letterHeight = 0.075
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $(Resptext)
      wrapWidth = 0.4
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  Routine NextFFInstrux
    TextComponent intrux_5
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.7
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      text:
        Press SPACE to see another starting word
    TextComponent EntertoContinue_5
      letterHeight = 0.03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press SPACE to begin
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        FFtrialnum+=1
        if FFtrialnum==2:
            continueRoutine==False
  Routine FFblank
    TextComponent text_5
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        firsttrial=True
Flow
  Routine FFinstrux
  Routine FFinstrux_2
  Routine FFblank
  LoopInitiator FFpractise loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine FF
  LoopTerminator FFpractise
  Routine FFinstrux_4
  LoopInitiator FFtrials loopType="TrialHandler"
    conditionsFile = FFcues.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Cue': 'candle'},
      {'Cue': 'bear'},
      {'Cue': 'table'}]
    Routine FFblank
    LoopInitiator FFresps loopType="TrialHandler"
      loopType = random
      nReps = 19
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      Routine FF
    LoopTerminator FFresps
    Routine NextFFInstrux
  LoopTerminator FFtrials
