PsychoPy2experiment version="2026.1.3"
Settings
  Experiment info = {'participant': '99', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = RATonline
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine _settings
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        #Remote Associates Test (RAT)
        #Written by James Lloyd-Cox for the Society for the Neuroscience of Creativity
        #This is meant as an example of how to code the RAT in Psychopy, and is not meant to represent the "best" way to do it
        #Feel free to edit or change the experiment in any way

        #import libraries
        import math
        import random

        #initiate variables
        CAPS=False

        #SETTINGS
        # Time (in seconds) that trials last:
        RATtime=30;
        # character limit for RAT text entry:
        charlim=25


        win.mouseVisible = False
      Begin JS Experiment:
        //var CAPS, countdownStarted;
        CAPS = false;

        function shuffleArray(array) {
            for (var i = array.length - 1; i > 0; i--) {
                var j = Math.floor(Math.random() * (i + 1));
                var temp = array[i];
                array[i] = array[j];
                array[j] = temp;
            }
        }

        document.body.style.cursor='none';
        RATtime=30;
        charlim=25;
  Routine RAT_instrux
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    TextComponent RATintrux
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        For the next task, you'll be shown 3 unrelated cue words, and you must find a 4th word that relates to all 3 words shown. See the example below:


        Cues:

        CHOCOLATE       FORTUNE       TIN


        Solution:

        COOKIE


        Cookie is the correct answer because it relates to all 3 cue words.
    TextComponent EntertoContinue
      letterHeight = 0.03
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press ENTER to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine RATinstrux_2
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    TextComponent RATintrux2
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        You will have 30 seconds per problem to think of an answer.

        As soon as you think you have the correct answer, type it in the box and press ENTER.

        You will then see the next problem.

        Press ENTER now to see some practise trials.
    TextComponent EntertoContinue_2
      letterHeight = 0.03
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press ENTER to continue
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine RATblank
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        CueString = [Cue1, Cue2, Cue3];
        function shuffleArray(array) {
            for (var i = array.length - 1; i > 0; i--) {
                var j = Math.floor(Math.random() * (i + 1));
                var temp = array[i];
                array[i] = array[j];
                array[j] = temp;
            }
        }
        shuffleArray(CueString);
      Begin Routine:
        #This code ensures that the cue words are presented
        # in a random order

        CueString=[Cue1,Cue2,Cue3]
        # we want the cues in a random order
        random.shuffle(CueString)
    TextComponent text_5
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine RAT
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    CodeComponent RATcode
      Code Type = Both
      Begin JS Routine:
        //is shift pressed?
        shift_flag = false;
        //#set response text as empty
        Resptext = "";
        RATResp.setText(Resptext)
        Key=undefined;

        //set 1st and last key press times
        RT1stKP=0;
        FirstKey=false;
        RTLastKP=0

        //start time for countdown/ trial timer
        startTime = globalClock.getTime();

        psychoJS.eventManager.clearKeys();
      Begin Routine:
        ##initiate variables
        #is shift pressed?
        shift_flag = False
        #set response text as empty
        Resptext = ''

        #set 1st and last key press times
        RT1stKP=0
        RTLastKP=0

        #start time for countdown/ trial timer
        startTime=globalClock.getTime()


        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        n=len(keys)
        i=0

        ###Timer#####
        Diff=globalClock.getTime()-startTime
        timeRemaining = RATtime-math.floor(Diff) #this gives us a whole number for time
        #remaining, using floor not round since we do not want the seconds to update except when the timeremaining crosses an actual whole integer
        Minutes = int(timeRemaining/60.0) # the integer number of minutes
        Seconds = int(timeRemaining - (Minutes * 60.0))
        #convert the above numbers into strings in the right format
        if Minutes<10:
            minstring='0' + str(Minutes)
        else:
            minstring=str(Minutes)
        if Seconds<10:
            secstring='0' + str(Seconds)
        else:
            secstring=str(Seconds)
        timeText = minstring + ':' + secstring # create a string of characters representing the time


        ###### Text entry #####
        while i < n: # len(keys):
            #process each key depending on what it is
            if keys[i] == 'return' and len(Resptext)>=1 or timeRemaining<= 0:
                RTLastKP=Diff
                continueRoutine = False
                break
            elif keys[i] == 'escape' and EscapeAllowed == True:
                continueRoutine = False
                core.quit()
                break
            elif keys[i] == 'space' :
                Resptext += " "
                i += 1
            elif keys[i] == 'backspace' :
                Resptext = Resptext[:-1]
                i += 1
            elif keys[i] == 'capslock' :
                if CAPS==True:
                    CAPS= False
                elif CAPS==False:
                    CAPS=True
                i += 1
            elif keys[i] == 'period'and len(Resptext) < charlim:
                Resptext += "."
                i += 1
            elif keys[i] == 'minus' and len(Resptext) < charlim:
                Resptext += "-"
                i += 1
            elif keys[i] == 'comma' and len(Resptext) < charlim:
                Resptext += ","
                i = i + 1
            elif keys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1
            elif keys[i] == 'semicolon' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += ";"
                else:
                    Resptext += ":"
                    shift_flag = False
                i += 1
            elif keys[i] == 'apostrophe' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += "'"
                else:
                    Resptext += '"'
                i += 1
            elif keys[i] == 'slash' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += "/"
                else:
                    Resptext += '?'
                    shift_flag = False
                i = i + 1
            elif keys[i] == '1' and len(Resptext) < charlim and shift_flag == True:
                Resptext += "!"
                shift_flag = False
                i = i + 1
            else:
                if len(Resptext) < charlim and len(keys[i])==1:
                    Key=keys[i]
                    if CAPS or shift_flag:
                        Resptext += Key.upper()
                        shift_flag=False
                    else:
                        Resptext += Key
                i += 1


        if timeRemaining <= 0:
            continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys();
        n = keys.length;
        i = 0;

        // Timer
        Diff = (globalClock.getTime() - startTime);
        timeRemaining = (RATtime - Math.floor(Diff));
        Minutes = Number.parseInt((timeRemaining / 60.0));
        Seconds = Number.parseInt((timeRemaining - (Minutes * 60.0)));
        if ((Minutes < 10)) {
            minstring = ("0" + Minutes.toString());
        } else {
            minstring = Minutes.toString();
        }
        if ((Seconds < 10)) {
            secstring = ("0" + Seconds.toString());
        } else {
            secstring = Seconds.toString();
        }
        timeText = ((minstring + ":") + secstring);

        // Text entry
        while ((i < n)) {
            if ((((keys[i] === "return") && (Resptext.length >= 1)) || (timeRemaining <= 0))) {
                RTLastKP=Diff;
                continueRoutine = false;
                break;
            } else if (((keys[i] === "space") && (Resptext.length < charlim))) {
                Resptext += " ";
                i = (i + 1);
            } else if ((keys[i] === "backspace")) {
                Resptext = Resptext.slice(0, (- 1));
                i = (i + 1);
            } else if ((keys[i] === "capslock")) {
                if ((CAPS === true)) {
                    CAPS = false;
                } else if ((CAPS === false)) {
                    CAPS = true;
                }
                i = (i + 1);
            } else if (((keys[i] === "period") && (Resptext.length < charlim))) {
                Resptext += ".";
                i = (i + 1);
            } else if (((keys[i] === "minus") && (Resptext.length < charlim))) {
                Resptext += "-";
                i = (i + 1);
            } else if (((keys[i] === "comma") && (Resptext.length < charlim))) {
                Resptext += ",";
                i = (i + 1);
            } else if (_pj.in_es6(keys[i], ["lshift", "rshift"])) {
                shift_flag = true;
                i = (i + 1);
            } else if (((keys[i] === "semicolon") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += ";";
                } else {
                    Resptext += ":";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if (((keys[i] === "apostrophe") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += "'";
                } else {
                    Resptext += "\"";
                    shift_flag = false;
                }
                i += 1;
            } else if (((keys[i] === "slash") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += "/";
                } else {
                    Resptext += "?";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if ((((keys[i] === "1") && (Resptext.length < charlim)) && (shift_flag === true))) {
                    Resptext += "!";
                    shift_flag = false;
                    i = (i + 1);
            } else {
                if (((Resptext.length < charlim) && (keys[i].length === 1))) {
                    Key = keys[i];
                    if ((CAPS || shift_flag)) {
                        Resptext += Key.toUpperCase();
                        shift_flag = false;
                    } else {
                        Resptext += Key;
                    }
                 }
                 Key = undefined;
                 i = (i + 1);
            }
        }

        if ((timeRemaining <= 0)) {
            continueRoutine = false;
        }
      End JS Routine:
        if (key_resp.rt) {
            RT1stKP = key_resp.rt[0];
            RTLastKP = key_resp.rt.slice((- 1))[0];
        }

        psychoJS.experiment.addData("RATresp", Resptext)
        psychoJS.experiment.addData("RT1stKP", RT1stKP)
        psychoJS.experiment.addData("RTLastKP", RTLastKP)
        psychoJS.experiment.addData("RATcue", CueString)
        Resptext = ''
      End Routine:
        #extract the 1st and last key presses
        if len(key_resp.rt)>0:
            RT1stKP=key_resp.rt[0]
            RTLastKP=key_resp.rt[-1]

        #save the data for this trial
        thisExp.addData("RATresp", Resptext)
        thisExp.addData("RT1stKP", RT1stKP)
        thisExp.addData("RTLastKP", RTLastKP)
        Resptext = ''
    PolygonComponent RATrespbox
      fillColor = $[1,1,1]
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.33, 0.13)
      startVal [time (s)] = 0.0
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    TextComponent InstruxRAT
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Think of a word that relates to all of these words:
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    TextComponent RATResp
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $Resptext
      wrapWidth = 0.3
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    TextComponent timer_1
      letterHeight = 0.08
      pos = (0.5, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    KeyboardComponent key_resp
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent RATcueDisp
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $(CueString[0])
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    TextComponent RATcueDisp_3
      letterHeight = 0.07
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $(CueString[1])
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    TextComponent RATcueDisp_4
      letterHeight = 0.07
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $(CueString[2])
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  Routine RATpracAns
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    TextComponent RATcueDisp_2
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $CueString[0]
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    TextComponent RATcueDisp_5
      letterHeight = 0.07
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $CueString[1]
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    TextComponent RATcueDisp_6
      letterHeight = 0.07
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $CueString[2]
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    TextComponent text
      letterHeight = 0.07
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Answer
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    TextComponent InstruxRAT_2
      letterHeight = 0.07
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Correct Answer:
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  Routine RATinstrux_3
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    TextComponent RATintrux3
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        That is the end of the practise trials. There will now be 10 real trials. You will no longer be shown the correct answer.

        Remember: the solution word must relate to all 3 cue words.

        You will have 30 seconds per problem to think of an answer.

        As soon as you think you have the correct answer, type it in the box and press ENTER.
    TextComponent EntertoContinue_3
      letterHeight = 0.03
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press ENTER to continue
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    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine _settings
  Routine RAT_instrux
  Routine RATinstrux_2
  LoopInitiator RATpractrials loopType="TrialHandler"
    conditionsFile = RATPraccues.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Cue1': 'cottage', 'Cue2': 'swiss', 'Cue3': 'cake', 'Answer': 'cheese'},
      {'Cue1': 'cream', 'Cue2': 'skate', 'Cue3': 'water', 'Answer': 'ice'}]
    Routine RATblank
    Routine RAT
    Routine RATpracAns
  LoopTerminator RATpractrials
  Routine RATinstrux_3
  LoopInitiator RATtrials loopType="TrialHandler"
    conditionsFile = RATcues.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Cue1': 'safety', 'Cue2': 'cushion', 'Cue3': 'point', 'Answer': 'pin', 'SolvedBy': 0.75},
      {'Cue1': 'dust', 'Cue2': 'cereal', 'Cue3': 'fish', 'Answer': 'bowl', 'SolvedBy': 0.75},
      {'Cue1': 'print', 'Cue2': 'berry', 'Cue3': 'bird', 'Answer': 'blue', 'SolvedBy': 0.732},
      {'Cue1': 'widow', 'Cue2': 'bite', 'Cue3': 'monkey', 'Answer': 'spider', 'SolvedBy': 0.625},
      {'Cue1': 'coin', 'Cue2': 'quick', 'Cue3': 'spoon', 'Answer': 'silver', 'SolvedBy': 0.5},
      {'Cue1': 'demon', 'Cue2': 'limit', 'Cue3': 'way', 'Answer': 'speed', 'SolvedBy': 0.482},
      {'Cue1': 'broken', 'Cue2': 'clear', 'Cue3': 'eye', 'Answer': 'glass', 'SolvedBy': 0.482},
      {'Cue1': 'lift', 'Cue2': 'card', 'Cue3': 'mask', 'Answer': 'face', 'SolvedBy': 0.429},
      {'Cue1': 'due', 'Cue2': 'life', 'Cue3': 'tense', 'Answer': 'past', 'SolvedBy': 0.429},
      {'Cue1': 'strike', 'Cue2': 'same', 'Cue3': 'tennis', 'Answer': 'match', 'SolvedBy': 0.393}]
    Routine RATblank
    Routine RAT
  LoopTerminator RATtrials
