PsychoPy2experiment version="2026.1.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TS
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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  Routine TypingSpeedInstrux
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    TextComponent TStext
      letterHeight = 0.04
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        For this task, you'll be asked to type as many words as you can in 30 seconds.

        Each screen will show a word. Please type out the exact word shown, in the text field and then press ENTER.
        A new word will then appear.

        This will continue for 30 seconds, so please type as many as you can within that time.
    KeyboardComponent key_resp_22
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent EnterToContinue_20
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press ENTER to begin the task
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    CodeComponent code_43
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';


        psychoJS.experiment.addData("TaskID", 15)
        Taskstart=globalClock.getTime()

        TStime=30


        CAPS=false

        range = (start, stop, step = 1) =>
          Array(Math.ceil((stop - start) / step)).fill(start).map((x, y) => x + y * step)

        roundOne = (n, d) => Math.round(n * Math.pow(10, d)) / Math.pow(10, d)

        RepArray = (K,n=1) => Array.from({length:n}).map(x => K)
      Begin Routine:
        win.mouseVisible = False

        Taskstart=globalClock.getTime()

        TStime=30

        import math

        CAPS=False
  Routine GetReady
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    TextComponent GetReadyText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Get ready
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    CodeComponent code_44
      Code Type = Auto->JS
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      End Routine:
        #start time for countdown/ trial timer
        startTime=globalClock.getTime()
  Routine TypingSpeed
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    CodeComponent TScode
      Code Type = Both
      Begin JS Routine:
        //is shift pressed?
        shift_flag = false;
        //#set response text as empty
        Resptext = " ";
        TSrespDisp.setText(Resptext)
        Key=undefined;

        charlim=30

        //set 1st and last key press times
        RT1stKP=0;
        RTLastKP=0

        psychoJS.eventManager.clearKeys();
      Begin Routine:
        ##initiate variables
        #is shift pressed?
        shift_flag = False
        #set response text as empty
        Resptext = ''

        charlim=30

        #set 1st and last key press times
        RT1stKP=0
        RTLastKP=0

        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        n=len(keys)
        i=0

        ###Timer#####
        Diff=globalClock.getTime()-startTime
        timeRemaining = TStime-math.floor(Diff) #this gives us a whole number for time
        #remaining, using floor not round since we do not want the seconds to update except when the timeremaining crosses an actual whole integer
        Minutes = int(timeRemaining/60.0) # the integer number of minutes
        Seconds = int(timeRemaining - (Minutes * 60.0))
        #convert the above numbers into strings in the right format
        if Minutes<10:
            minstring='0' + str(Minutes)
        else:
            minstring=str(Minutes)
        if Seconds<10:
            secstring='0' + str(Seconds)
        else:
            secstring=str(Seconds)
        timeText = minstring + ':' + secstring # create a string of characters representing the time


        ###### Text entry #####
        while i < n: # len(keys):
            #process each key depending on what it is
            if keys[i] == 'return' and len(Resptext)>=1 or timeRemaining<= 0:
                continueRoutine = False
                break
            elif keys[i] == 'escape' and EscapeAllowed == True:
                continueRoutine = False
                core.quit()
                break
            elif keys[i] == 'space' :
                Resptext += " "
                i += 1
            elif keys[i] == 'backspace' :
                Resptext = Resptext[:-1]
                i += 1
            elif keys[i] == 'capslock' :
                if CAPS==True:
                    CAPS= False
                elif CAPS==False:
                    CAPS=True
                i += 1
            elif keys[i] == 'period'and len(Resptext) < charlim:
                Resptext += "."
                i += 1
            elif keys[i] == 'minus' and len(Resptext) < charlim:
                Resptext += "-"
                i += 1
            elif keys[i] == 'comma' and len(Resptext) < charlim:
                Resptext += ","
                i = i + 1
            elif keys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1
            elif keys[i] == 'semicolon' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += ";"
                else:
                    Resptext += ":"
                    shift_flag = False
                i += 1
            elif keys[i] == 'apostrophe' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += "'"
                else:
                    Resptext += '"'
                i += 1
            elif keys[i] == 'slash' and len(Resptext) < charlim:
                if shift_flag == False:
                    Resptext += "/"
                else:
                    Resptext += '?'
                    shift_flag = False
                i = i + 1
            elif keys[i] == '1' and len(Resptext) < charlim and shift_flag == True:
                Resptext += "!"
                shift_flag = False
                i = i + 1
            else:
                if len(Resptext) < charlim and len(keys[i])==1:
                    Key=keys[i]
                    if CAPS or shift_flag:
                        Resptext += Key.upper()
                        shift_flag=False
                    else:
                        Resptext += Key
                i += 1

        if timeRemaining <= 0:
            continueRoutine = False
            TStrials.finished=True
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);


        keys = psychoJS.eventManager.getKeys();
        n = keys.length;
        i = 0;


        // Timer
        Diff = (globalClock.getTime() - startTime);
        timeRemaining = (TStime - Math.floor(Diff));
        Minutes = Number.parseInt((timeRemaining / 60.0));
        Seconds = Number.parseInt((timeRemaining - (Minutes * 60.0)));
        if ((Minutes < 10)) {
            minstring = ("0" + Minutes.toString());
        } else {
            minstring = Minutes.toString();
        }
        if ((Seconds < 10)) {
            secstring = ("0" + Seconds.toString());
        } else {
            secstring = Seconds.toString();
        }
        timeText = ((minstring + ":") + secstring);


        // Text entry
        while ((i < n)) {
            if (((keys[i] === "return") && (Resptext.length >= 2))  || (timeRemaining <= 0)) {
                continueRoutine = false;
                break;
            } else if (((keys[i] === "space") && (Resptext.length < charlim))) {
                Resptext += " ";
                i = (i + 1);
            } else if ((keys[i] === "backspace")) {
                Resptext = Resptext.slice(0, (- 1));
                i = (i + 1);
            } else if ((keys[i] === "capslock")) {
                if ((CAPS === true)) {
                    CAPS = false;
                } else if ((CAPS === false)) {
                    CAPS = true;
                }
                i = (i + 1);
            } else if (((keys[i] === "period") && (Resptext.length < charlim))) {
                Resptext += ".";
                i = (i + 1);
            } else if (((keys[i] === "minus") && (Resptext.length < charlim))) {
                Resptext += "-";
                i = (i + 1);
            } else if (((keys[i] === "comma") && (Resptext.length < charlim))) {
                Resptext += ",";
                i = (i + 1);
            } else if (_pj.in_es6(keys[i], ["lshift", "rshift"])) {
                shift_flag = true;
                i = (i + 1);
            } else if (((keys[i] === "semicolon") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += ";";
                } else {
                    Resptext += ":";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if (((keys[i] === "apostrophe") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += "'";
                } else {
                    Resptext += "\"";
                    shift_flag = false;
                }
                i += 1;
            } else if (((keys[i] === "slash") && (Resptext.length < charlim))) {
                if ((shift_flag === false)) {
                    Resptext += "/";
                } else {
                    Resptext += "?";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if ((((keys[i] === "1") && (Resptext.length < charlim)) && (shift_flag === true))) {
                    Resptext += "!";
                    shift_flag = false;
                    i = (i + 1);
            } else {
                if (((Resptext.length < charlim) && (keys[i].length === 1))) {
                    Key = keys[i];
                    if ((CAPS || shift_flag)) {
                        Resptext += Key.toUpperCase();
                        shift_flag = false;
                    } else {
                        Resptext += Key;
                    }
                 }
                 Key = undefined;
                 i = (i + 1);
            }
        }

        if ((timeRemaining <= 0)) {
            continueRoutine = false;
            TStrials.finished=true;
        }
      End JS Routine:
        if (key_respTS.rt) {
            RT1stKP = key_respTS.rt[0];
            RTLastKP = key_respTS.rt.slice((- 1))[0];
        }

        psychoJS.experiment.addData("TSinput", Resptext)
        psychoJS.experiment.addData("TSRT1stKP", RT1stKP)
        psychoJS.experiment.addData("TSRTLastKP", RTLastKP)
        PrevResp=Resptext
        Resptext = " "
      End Routine:
        #extract the 1st and last key presses
        if len(key_respTS.rt)>0:
            RT1stKP=key_respTS.rt[0]
            RTLastKP=key_respTS.rt[-1]


        thisExp.addData('TSinput', Resptext)
        thisExp.addData("TSRT1stKP", RT1stKP)
        thisExp.addData("TSRTLastKP", RTLastKP)
        Resptext=""
    TextComponent TScueDisp
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $TSstim
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    PolygonComponent polygon_6
      fillColor = $[1,1,1]
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.17)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_respTS
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    TextComponent TSrespDisp
      color = black
      letterHeight = 0.075
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $(Resptext)
      wrapWidth = 0.4
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    TextComponent Timer_2
      letterHeight = 0.09
      pos = (0.5, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $(timeText)
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Flow
  Routine TypingSpeedInstrux
  Routine GetReady
  LoopInitiator TStrials loopType="TrialHandler"
    conditionsFile = TS.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'TSstim': 'farther'},
      {'TSstim': 'rainbow'},
      {'TSstim': 'zephyr'},
      {'TSstim': 'apple'},
      {'TSstim': 'window'},
      {'TSstim': 'bearing'},
      {'TSstim': 'candle'},
      {'TSstim': 'romance'},
      {'TSstim': 'systems'},
      {'TSstim': 'except'},
      {'TSstim': 'delicate'},
      {'TSstim': 'gratitude'},
      {'TSstim': 'hapless'},
      {'TSstim': 'quickly'},
      {'TSstim': 'moonbeam'},
      {'TSstim': 'tricky'},
      {'TSstim': 'igloo'},
      {'TSstim': 'notch'},
      {'TSstim': 'aura'},
      {'TSstim': 'present'},
      {'TSstim': 'undone'},
      {'TSstim': 'yellow'},
      {'TSstim': 'jaundice'},
      {'TSstim': 'vanguard'},
      {'TSstim': 'hard'},
      {'TSstim': 'victory'},
      {'TSstim': 'extra'},
      {'TSstim': 'younger'},
      {'TSstim': 'founder'},
      {'TSstim': 'cellar'}]
    Routine TypingSpeed
  LoopTerminator TStrials
