PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = VerbalFluency
  keyboardBackend = ioHub
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Routines
  Routine VFinstrux
    TextComponent instrux
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Well done so far.

        In the next task, you will be given a category, and you must type as many items from that category as you can.

        For instance, if the category is "words beginning with F" you should type as many words that begin with F as you can.
    TextComponent EntertoContinue
      letterHeight = 0.03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press ENTER to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
        VFtime=60
      Begin Routine:
        EscapeAllowed = True
        win.mouseVisible = False

        # set duration of each trial
        VFtime=60
      Each JS Frame:
        document.body.style.cursor='none';
  Routine VF
    PolygonComponent VFrespbox
      fillColor = $[1,1,1]
      pos = (0, -0.22)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.17)
      startVal [time (s)] = 0.0
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    TextComponent InstruxVF
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Type as many words as you can that are in the category shown. Press ENTER after each word. 
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    TextComponent VFResp
      color = black
      letterHeight = 0.05
      pos = (0, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $Resptext
      wrapWidth = 0.48
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    TextComponent VFcueDisp
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $VFcond
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    CodeComponent VFcode
      Code Type = Both
      Begin Experiment:
        import math

        countdownStarted = False
        CAPS=False
      Begin JS Experiment:
        var CAPS, countdownStarted;
        countdownStarted = false;
        CAPS = false;
      Begin JS Routine:
        shift_flag = false;
        Resptext = "";
        Key=undefined;
        VFResp.setText(Resptext)
        RT1stKP=0;

        RTLastKP=0

        if ((! countdownStarted)) {
            startTime = globalClock.getTime();
            countdownStarted = true;
        }

        psychoJS.eventManager.clearKeys();
      Begin Routine:
        shift_flag = False
        Resptext = ''
        RT1stKP=0

        RTLastKP=0

        if not countdownStarted:
            startTime=globalClock.getTime()
            #timeText="03:00"
            countdownStarted=True

        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        n=len(keys)
        i=0


        ###Timer#####
        Diff=globalClock.getTime()-startTime
        timeRemaining = VFtime-math.floor(Diff/1) #this gives us a whole number for time
        #remaining, using floor not round since we do not want the seconds to update except when the timeremaining crosses an actual whole integer
        Minutes = int(timeRemaining/60.0) # the integer number of minutes
        Seconds = int(timeRemaining - (Minutes * 60.0))
        if Minutes<10:
            minstring='0' + str(Minutes)
        else:
            minstring=str(Minutes)
        if Seconds<10:
            secstring='0' + str(Seconds)
        else:
            secstring=str(Seconds)
        timeText = minstring + ':' + secstring # create a string of characters representing the time


        ###### Text entry #####
        while i < n: # len(keys):
            if keys[i] == 'return' and len(Resptext)>=1 or timeRemaining<= 0:
                continueRoutine = False
                break
            elif keys[i] == 'escape' and EscapeAllowed == True:
                continueRoutine = False
                core.quit()
                break
            elif keys[i] == 'space' :
                Resptext += " "
                i += 1
            elif keys[i] == 'backspace' :
                Resptext = Resptext[:-1]
                i += 1
            elif keys[i] == 'capslock' :
                if CAPS==True:
                    CAPS= False
                elif CAPS==False:
                    CAPS=True
                i += 1
            elif keys[i] == 'period'and len(Resptext) < 80:
                Resptext += "."
                i += 1
            elif keys[i] == 'minus' and len(Resptext) < 80:
                Resptext += "-"
                i += 1
            elif keys[i] == 'comma' and len(Resptext) < 80:
                Resptext += ","
                i = i + 1
            elif keys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1
            elif keys[i] == 'semicolon' and len(Resptext) < 80:
                if shift_flag == False:
                    Resptext += ";"
                else:
                    Resptext += ":"
                    shift_flag = False
                i += 1
            elif keys[i] == 'apostrophe' and len(Resptext) < 80:
                if shift_flag == False:
                    Resptext += "'"
                else:
                    Resptext += '"'
                i += 1
            elif keys[i] == 'slash' and len(Resptext) < 80:
                if shift_flag == False:
                    Resptext += "/"
                else:
                    Resptext += '?'
                    shift_flag = False
                i = i + 1
            elif keys[i] == '1' and len(Resptext) < 80 and shift_flag == True:
                Resptext += "!"
                shift_flag = False
                i = i + 1
            else:
                if len(Resptext) < 80 and len(keys[i])==1:
                    Key=keys[i]
                    if CAPS or shift_flag:
                        Resptext += Key.upper()
                        shift_flag=False
                    else:
                        Resptext += Key
                i += 1

        if timeRemaining <= 0:
            VFresps.finished = True
            continueRoutine = False
            countdownStarted = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys();
        n = keys.length;
        i = 0;

        Diff = (globalClock.getTime() - startTime);
        timeRemaining = (VFtime - Math.floor((Diff / 1)));
        Minutes = Number.parseInt((timeRemaining / 60.0));
        Seconds = Number.parseInt((timeRemaining - (Minutes * 60.0)));
        if ((Minutes < 10)) {
            minstring = ("0" + Minutes.toString());
        } else {
            minstring = Minutes.toString();
        }
        if ((Seconds < 10)) {
            secstring = ("0" + Seconds.toString());
        } else {
            secstring = Seconds.toString();
        }
        timeText = ((minstring + ":") + secstring);

        while ((i < n)) {
            if ((((keys[i] === "return") && (Resptext.length >= 1)) || (timeRemaining <= 0))) {
                continueRoutine = false;
                break;
            } else if (((keys[i] === "space") && (Resptext.length < 80))) {
                Resptext += " ";
                i = (i + 1);
            } else if ((keys[i] === "backspace")) {
                Resptext = Resptext.slice(0, (- 1));
                i = (i + 1);
            } else if ((keys[i] === "capslock")) {
                if ((CAPS === true)) {
                    CAPS = false;
                } else if ((CAPS === false)) {
                    CAPS = true;
                }
                i = (i + 1);
            } else if (((keys[i] === "period") && (Resptext.length < 80))) {
                Resptext += ".";
                i = (i + 1);
            } else if (((keys[i] === "minus") && (Resptext.length < 80))) {
                Resptext += "-";
                i = (i + 1);
            } else if (((keys[i] === "comma") && (Resptext.length < 80))) {
                Resptext += ",";
                i = (i + 1);
            } else if (_pj.in_es6(keys[i], ["lshift", "rshift"])) {
                shift_flag = true;
                i = (i + 1);
            } else if (((keys[i] === "semicolon") && (Resptext.length < 80))) {
                if ((shift_flag === false)) {
                    Resptext += ";";
                } else {
                    Resptext += ":";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if (((keys[i] === "apostrophe") && (Resptext.length < 80))) {
                if ((shift_flag === false)) {
                    Resptext += "'";
                } else {
                    Resptext += "\"";
                    shift_flag = false;
                }
                i += 1;
            } else if (((keys[i] === "slash") && (Resptext.length < 80))) {
                if ((shift_flag === false)) {
                    Resptext += "/";
                } else {
                    Resptext += "?";
                    shift_flag = false;
                }
                i = (i + 1);
            } else if ((((keys[i] === "1") && (Resptext.length < 80)) && (shift_flag === true))) {
                    Resptext += "!";
                    shift_flag = false;
                    i = (i + 1);
            } else {
                if (((Resptext.length < 80) && (keys[i].length === 1))) {
                    Key = keys[i];
                    if ((CAPS || shift_flag)) {
                        Resptext += Key.toUpperCase();
                        shift_flag = false;
                    } else {
                        Resptext += Key;
                    }
                 }
                 Key = undefined;
                 i = (i + 1);
            }
        }

        if ((timeRemaining <= 0)) {
            VFresps.finished = true;
            continueRoutine = false;
            countdownStarted = false;
        }
      End JS Routine:
        if (key_respVF.rt) {
            RT1stKP = key_respVF.rt[0];
            RTLastKP = key_respVF.rt.slice((- 1))[0];
        }

        psychoJS.experiment.addData("VFresp", Resptext)
        psychoJS.experiment.addData("VFRT1stKP", RT1stKP)
        psychoJS.experiment.addData("VFRTLastKP", RTLastKP)
        psychoJS.experiment.addData("VFcue", VFcond)
        Resptext = ''
      End Routine:
        #extract the 1st and last key presses
        if len(key_respVF.rt)>0:
            RT1stKP=key_respVF.rt[0]
            RTLastKP=key_respVF.rt[-1]

        #save the data for this trial
        thisExp.addData("VFresp", Resptext)
        thisExp.addData("VFRT1stKP", RT1stKP)
        thisExp.addData("VFRTLastKP", RTLastKP)
        Resptext = ''
    TextComponent timeText_1
      letterHeight = 0.1
      pos = (0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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    KeyboardComponent key_respVF
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine getreadyVF
    TextComponent InstruxVF_2
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text = Type as many words as you can that are in the category shown. Press ENTER after each word. 
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    TextComponent text_2
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text = +
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  Routine AUTblank
    TextComponent text
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine VFinstrux_2
    TextComponent intrux_2
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Do not enter the same item twice, or the same root word with different suffixes (e.g., if you list "fox", do not list "foxes" in the same round).

        You will have 60 seconds to type as many items from the category as you can. Press ENTER after typing each word.

        There will be 3 categories in total.
    TextComponent EntertoContinue_2
      letterHeight = 0.03
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press ENTER to begin
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine NextTrialVF
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        keeptracknumind=0
      Begin Routine:
        ## this code simply keeps track of what trial number it is
        keeptracknumind+=1
        if keeptracknumind==3:
            continueRoutine=False

        blahtext=str(keeptracknumind)
    TextComponent intrux_14
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to begin the next trial.
      wrapWidth = 1.2
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    KeyboardComponent key_resp_20
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine VFinstrux
  Routine VFinstrux_2
  LoopInitiator VFtrials loopType="TrialHandler"
    conditionsFile = VFconds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'VFcond': 'Words with 5 letters'},
      {'VFcond': 'First names'},
      {'VFcond': "Words beginning with 'M'"}]
    Routine getreadyVF
    LoopInitiator VFresps loopType="TrialHandler"
      loopType = sequential
      nReps = 100
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      Routine VF
    LoopTerminator VFresps
    Routine NextTrialVF
  LoopTerminator VFtrials
